soma.diam = 12.1111111111
soma.L = 20.8888888888889
soma.g_pas = 0.0000591666666666667
soma.e_pas = -65       
soma.gbar_na3rp = 0.03 
soma.gbar_naps = 0.0001
soma.sh_na3rp = 10
soma.sh_naps = 15
soma.shh_naps = 0
soma.ar_na3rp = 0.4
soma.ar_naps = 0.4
soma.gMax_kdrRL = 0.01
soma.gcamax_mAHP = 5.5e-05
soma.gkcamax_mAHP = 0.00018
soma.taur_mAHP = 76.6666666666667
soma.g_leak = 0
soma.depth_mAHP = 0.6                             

is.nseg = 9
is.diam = 1.84444444444444
is.L = 10
is.g_pas = 0.00001
is.e_pas = -65
is.g_leak = 0   
is.gbar_na3rp = 0.138888888888889
is.gbar_naps = 0.000157777777777778
is.sh_na3rp = 10
is.sh_naps = 7
is.ar_na3rp = 0.4
is.ar_naps = 0.4
is.gMax_kdrRL = 0.04

axonhillock.nseg = 7
axonhillock.L = 10
axonhillock.diam(0:1) = 1.84444444444444:8.2222222222222
axonhillock.g_pas = 0.00001
axonhillock.g_leak = 0
axonhillock.e_pas = -65        
axonhillock.gbar_na3rp = 0.138888888888889
axonhillock.gbar_naps = 0.000157777777777778
axonhillock.sh_na3rp = 10
axonhillock.sh_naps = 7
axonhillock.ar_na3rp = 0.4
axonhillock.ar_naps = 0.4
axonhillock.gMax_kdrRL = 0.04

dendrite.nseg = 25
dendrite.L = 600.22222222222
dendrite.g_leak = 0
dendrite.diam(0:0.2) = 1.4444444444444:5.4444444444444
dendrite.diam(0.2:1) = 5.4444444444444:0     
dendrite.g_pas = 2.89222222222222e-05
dendrite.e_pas = -65         
dendrite.gbar_na3rp(0:0.04) = 0.0044:0.0044
dendrite.gbar_na3rp(0.04:1) = 0.0000075:0.0000075
dendrite.gbar_naps(0:0.04) = 0.0000044:0.0000044
dendrite.gbar_naps(0.04:1) = 1.5e-07:1.5e-07     
dendrite.sh_na3rp = 10
dendrite.sh_naps = 15
dendrite.ar_na3rp(0:0.04) = 0.4:0.4
dendrite.ar_naps(0:0.04) = 0.4:0.4
dendrite.ar_na3rp(0.04:1) = 0.4:0.4
dendrite.ar_naps(0.04:1) = 0.4:0.4
dendrite.gMax_kdrRL(0:0.04) = 0.001:0.001
dendrite.gMax_kdrRL(0.04:1) = 0.000000033:0.000000033
dendrite.gcabar_L_Ca(0:0.32) = 0:0
dendrite.gcabar_L_Ca(0.32:0.56) = 0.00003:0.00003  
dendrite.gcabar_L_Ca(0.56:1) = 0:0
dendrite.g_kca2(0:0.32) = 0:0
dendrite.g_kca2(0.32:0.56) = 4e-05:4e-05
dendrite.g_kca2(0.56:1) = 0:0           
dendrite.depth2_kca2 = 100
dendrite.taur2_kca2 = 120
dendrite.gcamax_mAHP(0:0.04) = 1e-06:1e-06
dendrite.gcamax_mAHP(0.04:1) = 0:0
dendrite.gkcamax_mAHP(0:0.1) = 0.00038:0.00038
dendrite.gkcamax_mAHP(0.1:1) = 0:0
dendrite.taur_mAHP = 76.6666666666667
dendrite.depth_mAHP = 0.6

tmin_kdrRL = 0.8
taumax_kdrRL = 20
qinf_na3rp = 4.8
thinf_na3rp = -50.5
Rd_na3rp = 0.06
qd_na3rp = 1.3
qg_na3rp = 1.3
thi1_na3rp = -35
thi2_na3rp = -35
vslope_naps = 5
celsius = 37
dendrite.theta_m_L_Ca = -41
dendrite.kappa_m_L_Ca = -4
V0 = -3.88888888888889
